PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Priming Experiment
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar" 
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] =  0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine trial2
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = click to submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'vase'},
      {'study_word': 'tiger'},
      {'study_word': 'book '},
      {'study_word': 'cushion '},
      {'study_word': 'piano '},
      {'study_word': 'door '},
      {'study_word': 'refrigerator'},
      {'study_word': 'buildings '},
      {'study_word': 'south'},
      {'study_word': 'bag'},
      {'study_word': 'pigeon'},
      {'study_word': 'bottle'},
      {'study_word': 'nails'},
      {'study_word': 'shampoo'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': '_a_e'},
      {'test_word': 't_g_r'},
      {'test_word': '_oo_'},
      {'test_word': 'c_s_i_n'},
      {'test_word': '_ian_'},
      {'test_word': 'ho_s_'},
      {'test_word': 'c_m_r_'},
      {'test_word': 'b_tt_r'},
      {'test_word': '_o_s_'},
      {'test_word': 'o_a_n_e'},
      {'test_word': 'c_ot_'},
      {'test_word': 'n_il'},
      {'test_word': 'w_tc_'},
      {'test_word': 'cu_ta_n'},
      {'test_word': 'ma_go'},
      {'test_word': 'c_lo_'},
      {'test_word': 'u_b_el_a '},
      {'test_word': 'sha_po_'},
      {'test_word': 'w_r_obe'}]
    Routine trial2
  LoopTerminator trials_2
